! Set the region of interest (in meters)
Metric_Explicit
! /RESULT_METRIC_FOLDER=PROCESSED
/RESULT_METRIC_NAME=END_1_Pos
/METRIC_VALUE=-1.5
;

Metric_Explicit
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/RESULT_METRIC_NAME=END_2_Pos
/METRIC_VALUE=2.8
;

Event_Delete
/EVENT_NAME=START+ROI_START+ROI_END+axis_of_travel
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;

Rectify
/SIGNAL_TYPES=KINETIC_KINEMATIC
/SIGNAL_FOLDER=RPV
/SIGNAL_NAMES=CGPos
/RESULT_TYPES=DERIVED
/RESULT_FOLDERS=RPV
/RESULT_NAME=CGPos_Rectified
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;

Metric_Sum
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/RESULT_METRIC_NAME=RPV_CGPos_Sum
! /APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=RPV
/SIGNAL_NAMES=CGPos_Rectified
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
! /APPEND_TO_EXISTING_VALUES=FALSE
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=IS_X_GREATER
/EXPRESSION=METRIC::PROCESSED::RPV_CGPos_Sum::X > METRIC::PROCESSED::RPV_CGPos_Sum::Y
!/AS_INTEGER=TRUE
;

! Set the axis of travel to X
Set_Pipeline_Parameter
/PARAMETER_NAME=axis_of_travel
/PARAMETER_VALUE=X
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! /MULTI_PASS=FALSE
;

Conditional_Statement_End
/ITERATION_PARAMETER_NAME=IS_X_GREATER
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=IS_Y_GREATER
/EXPRESSION=METRIC::PROCESSED::RPV_CGPos_Sum::X < METRIC::PROCESSED::RPV_CGPos_Sum::Y
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;

! Set the axis of travel to Y
Set_Pipeline_Parameter
/PARAMETER_NAME=axis_of_travel
/PARAMETER_VALUE=Y
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;

Conditional_Statement_End
/ITERATION_PARAMETER_NAME=IS_Y_GREATER
;


Event_Explicit
/EVENT_NAME=Start
/FRAME=1
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;

Event_Threshold
/RESULT_EVENT_NAME=ROI_START
/SIGNAL_TYPES=KINETIC_KINEMATIC
/SIGNAL_FOLDER=RPV
/SIGNAL_NAMES=CGPos
/SIGNAL_COMPONENTS=::axis_of_travel
/FRAME_OFFSET=-1
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! /EVENT_SEQUENCE_INSTANCE=0
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! /EVENT_SUBSEQUENCE_INSTANCE=0
! /EVENT_INSTANCE=0
/THRESHOLD=METRIC::PROCESSED::END_1_Pos
/ON_ASCENT=TRUE
/ON_DESCENT=FALSE
! /FRAME_WINDOW=8
! /ENSURE_FRAMES_BEFORE=FALSE
! /ENSURE_FRAMES_AFTER=FALSE
;

Event_Threshold
/RESULT_EVENT_NAME=ROI_START
/SIGNAL_TYPES=KINETIC_KINEMATIC
/SIGNAL_FOLDER=RPV
/SIGNAL_NAMES=CGPos
/SIGNAL_COMPONENTS=::axis_of_travel
/FRAME_OFFSET=-1
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/THRESHOLD=METRIC::PROCESSED::END_2_Pos
/ON_ASCENT=FALSE
/ON_DESCENT=TRUE
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;

Event_Threshold
/RESULT_EVENT_NAME=ROI_END
/SIGNAL_TYPES=KINETIC_KINEMATIC
/SIGNAL_FOLDER=RPV
/SIGNAL_NAMES=CGPos
/SIGNAL_COMPONENTS=::axis_of_travel
/FRAME_OFFSET=-1
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/THRESHOLD=METRIC::PROCESSED::END_1_Pos
/ON_ASCENT=FALSE
/ON_DESCENT=TRUE
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;

Event_Threshold
/RESULT_EVENT_NAME=ROI_END
/SIGNAL_TYPES=KINETIC_KINEMATIC
/SIGNAL_FOLDER=RPV
/SIGNAL_NAMES=CGPos
/SIGNAL_COMPONENTS=::axis_of_travel
/FRAME_OFFSET=-1
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/THRESHOLD=METRIC::PROCESSED::END_2_Pos
/ON_ASCENT=TRUE
/ON_DESCENT=FALSE
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;
