Select_Active_File
/FILE_NAME=WALK+FASTWALK
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! /SUBJECT_TAGS=NO_SUBJECT
;

Set_Pipeline_Parameter
/PARAMETER_NAME=axis_of_travel
/PARAMETER_VALUE=X
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! /MULTI_PASS=FALSE
;

Metric_Explicit
! /RESULT_METRIC_FOLDER=PROCESSED
/RESULT_METRIC_NAME=END_1_Pos
/METRIC_VALUE=-2.8
;

Metric_Explicit
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/RESULT_METRIC_NAME=END_2_Pos
/METRIC_VALUE=1.8
;

Event_Delete
/EVENT_NAME=RON+ROFF+RTO+RHS+LON+LOFF+LTO+LHS+Start+ROI_START+ROI_END
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;

!------------------------------------------------------- PUTTING HEEL LANDMARKS IN PELVIS FRAME
Compute_Model_Based_Data
/RESULT_NAME=RHEEL_WRT_RPV
/FUNCTION=TARGET_PATH
/SEGMENT=R_HEEL
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=RPV
! /USE_CARDAN_SEQUENCE=FALSE
! /NORMALIZATION=FALSE
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! /NEGATEX=FALSE
! /NEGATEY=FALSE
! /NEGATEZ=FALSE
! /AXIS1=X
! /AXIS2=Y
! /AXIS3=Z
! /TREADMILL_DATA=FALSE
! /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
! /TREADMILL_SPEED=0.0
;

Compute_Model_Based_Data
/RESULT_NAME=LHEEL_WRT_RPV
/FUNCTION=TARGET_PATH
/SEGMENT=L_HEEL
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=RPV
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;

Event_Maximum
/RESULT_EVENT_NAME=RHS
/SIGNAL_TYPES=LINK_MODEL_BASED
! /SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=RHEEL_WRT_RPV
/SIGNAL_COMPONENTS=Y
! /FRAME_OFFSET=0
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! /EVENT_SEQUENCE_INSTANCE=0
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! /EVENT_SUBSEQUENCE_INSTANCE=0
! /EVENT_INSTANCE=0
/FRAME_WINDOW=20
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;

Event_Maximum
/RESULT_EVENT_NAME=LHS
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=LHEEL_WRT_RPV
/SIGNAL_COMPONENTS=Y
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/FRAME_WINDOW=20
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;

Event_Explicit
/EVENT_NAME=Start
/FRAME=1
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;

Event_Threshold
/RESULT_EVENT_NAME=ROI_START
/SIGNAL_TYPES=KINETIC_KINEMATIC
/SIGNAL_FOLDER=RPV
/SIGNAL_NAMES=CGPos
/SIGNAL_COMPONENTS=axis_of_travel
/FRAME_OFFSET=-1
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/THRESHOLD=METRIC::PROCESSED::END_1_Pos
/ON_ASCENT=TRUE
/ON_DESCENT=FALSE
! /FRAME_WINDOW=8
! /ENSURE_FRAMES_BEFORE=FALSE
! /ENSURE_FRAMES_AFTER=FALSE
;

Event_Threshold
/RESULT_EVENT_NAME=ROI_START
/SIGNAL_TYPES=KINETIC_KINEMATIC
/SIGNAL_FOLDER=RPV
/SIGNAL_NAMES=CGPos
/SIGNAL_COMPONENTS=axis_of_travel
/FRAME_OFFSET=-1
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/THRESHOLD=METRIC::PROCESSED::END_2_Pos
/ON_ASCENT=FALSE
/ON_DESCENT=TRUE
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;

Event_Threshold
/RESULT_EVENT_NAME=ROI_END
/SIGNAL_TYPES=KINETIC_KINEMATIC
/SIGNAL_FOLDER=RPV
/SIGNAL_NAMES=CGPos
/SIGNAL_COMPONENTS=axis_of_travel
/FRAME_OFFSET=-1
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/THRESHOLD=METRIC::PROCESSED::END_1_Pos
/ON_ASCENT=FALSE
/ON_DESCENT=TRUE
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;

Event_Threshold
/RESULT_EVENT_NAME=ROI_END
/SIGNAL_TYPES=KINETIC_KINEMATIC
/SIGNAL_FOLDER=RPV
/SIGNAL_NAMES=CGPos
/SIGNAL_COMPONENTS=axis_of_travel
/FRAME_OFFSET=-1
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/THRESHOLD=METRIC::PROCESSED::END_2_Pos
/ON_ASCENT=TRUE
/ON_DESCENT=FALSE
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;

Event_Delete
/EVENT_NAME=LHS+RHS+LTO+RTO
/EVENT_SEQUENCE=START+ROI_START
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;

Event_Delete
/EVENT_NAME=LHS+RHS+LTO+RTO
/EVENT_SEQUENCE=ROI_END+EOF
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;

Event_Delete
/EVENT_NAME=LHS+RHS+LTO+RTO
/EVENT_SEQUENCE=ROI_END+ROI_START
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;

Highlight_Event_Label
/EVENT_LABEL=ROI_START+ROI_END
/REMOVE_EXISTING_HIGHLIGHTS=TRUE
;

Interactive_Graph_Signals
/SIGNAL_TYPES=KINETIC_KINEMATIC
/SIGNAL_FOLDER=RPV
/SIGNAL_NAMES=CGPos
/SIGNAL_COMPONENTS=::axis_of_travel
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/REPLACE_CURRENT=TRUE
;

Switch_Between_Tabs
/SHOW_SIGNALS_AND_EVENTS_TAB=TRUE
! /SHOW_WORKSPACE_TAB=FALSE
! /SHOW_MODELS_TAB=FALSE
;

