Set_Pipeline_Parameter_To_Folder_Path
/PARAMETER_NAME=SAVE_LOCATION
/PARAMETER_VALUE=
/FROM_MOTION_FILE_IN_WORKSPACE=*WALK*
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! /SET_PROMPT=Select a directory
! /ALPHABETIZE=TRUE
! /FOLDER=X:\Ortho-Phase-2\raw-data\optitrack_v3d\E21-34-1-100\
;

Select_Active_File
/FILE_NAME=Walk+FastWalk
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;

Remove_Signals
/SIGNAL_TYPES=METRIC+METRIC+METRIC+METRIC
/SIGNAL_FOLDER=TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE
/SIGNAL_NAMES=Overall_Speed_Mean+Overall_Stride_Width_Count+Overall_Stride_Width_Mean+Overall_Stride_Width_StdDev
! /INCLUDE_MODELS=FALSE
;

Metric_Compute_Temporal_Distance
! /GLOBAL_RESULT_METRIC_FOLDER=TEMPORAL_DISTANCE
/CALCULATE_PER_FILE=TRUE
/CALCULATE_PER_ALL_CMO_GLOBALS=TRUE
/CREATE_ALL_INSTANCES=TRUE
! /CREATE_EMPTY_VALUES=TRUE
! /RIGHT_FOOT_LOCATION=KINETIC_KINEMATIC::RFT::ProxEndPos
! /LEFT_FOOT_LOCATION=KINETIC_KINEMATIC::LFT::ProxEndPos
! /HEIGHT=METRIC::PROCESSED::HEIGHT
/RHS_EVENT=RHS
/LHS_EVENT=LHS
/RTO_EVENT=RTO
/LTO_EVENT=LTO
! /STRICT_EVENT_SEQUENCE_VALIDATION=FALSE
/INCLUDE_EVENTS=ROI_START+ROI_END
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! /EVENT_INSTANCE=0
! /COMPUTE_SPEED=TRUE
/COMPUTE_STATURES_PER_SECOND=FALSE
! /COMPUTE_STRIDE_WIDTH=TRUE
! /COMPUTE_STRIDE_LENGTH=TRUE
! /COMPUTE_CYCLE_TIME=TRUE
/COMPUTE_STEP_LENGTH=FALSE
/COMPUTE_STEP_TIME=FALSE
/COMPUTE_STANCE_TIME=FALSE
/COMPUTE_SWING_TIME=FALSE
! /COMPUTE_STEPS_PER_MINUTE=TRUE
! /COMPUTE_STRIDES_PER_MINUTE=TRUE
/COMPUTE_DOUBLE_LIMB_SUPPORT_TIME=FALSE
/COMPUTE_RIGHT_INITIAL_DOUBLE_LIMB_SUPPORT_TIME=FALSE
/COMPUTE_RIGHT_TERMINAL_DOUBLE_LIMB_SUPPORT_TIME=FALSE
! /COMPUTE_FLIGHT_TIME=FALSE
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;

Metric_Explicit
/RESULT_METRIC_FOLDER=TEMPORAL_DISTANCE
/RESULT_METRIC_NAME=Overall_Speed_Mean
/METRIC_VALUE=METRIC::TEMPORAL_DISTANCE::Speed
;

Metric_Explicit
/RESULT_METRIC_FOLDER=TEMPORAL_DISTANCE
/RESULT_METRIC_NAME=Overall_Stride_Width_Count
/METRIC_VALUE=METRIC::TEMPORAL_DISTANCE::Stride_Width_Count
;

Metric_Explicit
/RESULT_METRIC_FOLDER=TEMPORAL_DISTANCE
/RESULT_METRIC_NAME=Overall_Stride_Width_Mean
/METRIC_VALUE=METRIC::TEMPORAL_DISTANCE::Stride_Width_Mean
;

Metric_Explicit
/RESULT_METRIC_FOLDER=TEMPORAL_DISTANCE
/RESULT_METRIC_NAME=Overall_Stride_Width_StdDev
/METRIC_VALUE=METRIC::TEMPORAL_DISTANCE::Stride_Width_StdDev
;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+DERIVED+DERIVED+DERIVED+DERIVED
/SIGNAL_FOLDER=ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+JOINT_POSITION+JOINT_POSITION+JOINT_POSITION+JOINT_POSITION
/SIGNAL_NAMES=LEFT_ANKLE_ANGLE+LEFT_FOOT_ANGLE+LEFT_FOREFOOT_ANGLE+LEFT_HIP_ANGLE+LEFT_KNEE_ANGLE+LEFT_PELVIS_ANGLE+LEFT_SHANK_ANGLE+LEFT_THIGH_ANGLE+LEFT_TOE_ANGLE+LEFT_ANKLE_JOINT_POSITION+LEFT_HIP_JOINT_POSITION+LEFT_KNEE_JOINT_POSITION+LEFT_PELVIS_JOINT_POSITION
/FILE_NAME=::SAVE_LOCATION&left_metrics.txt
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/COMPONENT_SEQUENCE=ALL
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/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=ROI_End
! /USE_POINT_RATE=FALSE
/NORMALIZE_DATA=TRUE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /EXPORT_MEAN_AND_STD_DEV_FOR_METRIC=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
! /USE_JSON_FORMAT=FALSE
/USE_SHORT_FILENAME=TRUE
! /INCLUDE_TAGS_FOR_XML=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+DERIVED+DERIVED+DERIVED+DERIVED
/SIGNAL_FOLDER=ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+JOINT_POSITION+JOINT_POSITION+JOINT_POSITION+JOINT_POSITION
/SIGNAL_NAMES=RIGHT_ANKLE_ANGLE+RIGHT_FOOT_ANGLE+RIGHT_FOREFOOT_ANGLE+RIGHT_HIP_ANGLE+RIGHT_KNEE_ANGLE+RIGHT_PELVIS_ANGLE+RIGHT_SHANK_ANGLE+RIGHT_THIGH_ANGLE+RIGHT_TOE_ANGLE+RIGHT_ANKLE_JOINT_POSITION+RIGHT_HIP_JOINT_POSITION+RIGHT_KNEE_JOINT_POSITION+RIGHT_PELVIS_JOINT_POSITION
/FILE_NAME=::SAVE_LOCATION&right_metrics.txt
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/COMPONENT_SEQUENCE=ALL
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/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=ROI_End
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/NORMALIZE_DATA=TRUE
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/USE_SHORT_FILENAME=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=METRIC
/SIGNAL_FOLDER=TEMPORAL_DISTANCE
/SIGNAL_NAMES=Left_Cycle_Time_Mean+Left_Cycle_Time_StdDev+Left_Steps_Per_Minute_Count+Left_Steps_Per_Minute_Mean+Left_Steps_Per_Minute_StdDev+Left_Stride_Length_Count+Left_Stride_Length_Mean+Left_Stride_Length_StdDev+Left_Strides_Per_Minute_Count+Left_Strides_Per_Minute_Mean+Left_Strides_Per_Minute_StdDev+Overall_Speed_Mean+Overall_Stride_Width_Count+Overall_Stride_Width_Mean+Overall_Stride_Width_StdDev+Right_Cycle_Time_Count+Right_Cycle_Time_Mean+Right_Cycle_Time_StdDev+Right_Steps_Per_Minute_Count+Right_Steps_Per_Minute_Mean+Right_Steps_Per_Minute_StdDev+Right_Stride_Length_Count+Right_Stride_Length_Mean+Right_Stride_Length_StdDev+Right_Strides_Per_Minute_Count+Right_Strides_Per_Minute_Mean+Right_Strides_Per_Minute_StdDev
/FILE_NAME=::SAVE_LOCATION&stp_metrics.txt
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/COMPONENT_SEQUENCE=ALL
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/NORMALIZE_DATA=TRUE
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/USE_SHORT_FILENAME=TRUE
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;

Open_Report_Template
/REPORT_TEMPLATE=
! /SET_PROMPT=Open report template
;

Switch_to_Report_Mode
! /SHOW_ANIMATION=FALSE
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;

File_Save
! /SET_PROMPT=Save CMO file
;

