! EXPORT DATA START
Set_Pipeline_Parameter_To_Folder_Path
/PARAMETER_NAME=CMZ_LOCATION
/PARAMETER_VALUE=
/PARAMETER_VALUE_MOTION_FILE=*.cmz
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;

Export_Data_To_Ascii_File
/FILE_NAME=::CMZ_LOCATION&left_stride_metrics.txt
/SIGNAL_TYPES=LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL
/SIGNAL_NAMES=LEFT_ANKLE_ANGLE+LEFT_ANKLE_POSITION+LEFT_FOOT_ANGLE+LEFT_FOREFOOT_ANGLE+LEFT_HIP_ANGLE+LEFT_HIP_POSITION+LEFT_KNEE_ANGLE+LEFT_KNEE_POSITION+LEFT_MODELCOM_POSITION+LEFT_PELVIS_ANGLE+LEFT_SHANK_ANGLE+LEFT_THIGH_ANGLE+LEFT_TOE_ANGLE+LEFT_TOE_POSITION
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/COMPONENT_SEQUENCE=ALL
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/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=ROI_End+LBAD
! /USE_POINT_RATE=FALSE
/NORMALIZE_DATA=TRUE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /EXPORT_MEAN_AND_STD_DEV_FOR_METRIC=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
! /USE_JSON_FORMAT=FALSE
/USE_SHORT_FILENAME=TRUE
! /INCLUDE_TAGS_FOR_XML=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /CREATE_FOLDER_PATH=TRUE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

Export_Data_To_Ascii_File
/FILE_NAME=::CMZ_LOCATION&right_stride_metrics.txt
/SIGNAL_TYPES=LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL
/SIGNAL_NAMES=RIGHT_ANKLE_ANGLE+RIGHT_ANKLE_POSITION+RIGHT_FOOT_ANGLE+RIGHT_FOREFOOT_ANGLE+RIGHT_HIP_ANGLE+RIGHT_HIP_POSITION+RIGHT_KNEE_ANGLE+RIGHT_KNEE_POSITION+RIGHT_MODELCOM_POSITION+RIGHT_PELVIS_ANGLE+RIGHT_SHANK_ANGLE+RIGHT_THIGH_ANGLE+RIGHT_TOE_ANGLE+RIGHT_TOE_POSITION
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/COMPONENT_SEQUENCE=ALL
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/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=ROI_End+RBAD
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/NORMALIZE_DATA=TRUE
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/USE_SHORT_FILENAME=TRUE
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;

!!!! DUPLICATE LINKED_MODEL_BASED TO GET STANCE DATA
Copy_Folder
/SIGNAL_TYPES=LINK_MODEL_BASED
/EXISTING_FOLDER=ORIGINAL
/NEW_FOLDER_NAME=STANCE
! /OVERWRITE_EXISTING_SIGNALS=FALSE
;

! STANCE OUTPUTS (51 Points)
Export_Data_To_Ascii_File
/FILE_NAME=::CMZ_LOCATION&left_stance_metrics.txt
/SIGNAL_TYPES=LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED
/SIGNAL_FOLDER=STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE
/SIGNAL_NAMES=LEFT_ANKLE_ANGLE+LEFT_ANKLE_POSITION+LEFT_FOOT_ANGLE+LEFT_FOREFOOT_ANGLE+LEFT_HIP_ANGLE+LEFT_HIP_POSITION+LEFT_KNEE_ANGLE+LEFT_KNEE_POSITION+LEFT_MODELCOM_POSITION+LEFT_PELVIS_ANGLE+LEFT_SHANK_ANGLE+LEFT_THIGH_ANGLE+LEFT_TOE_ANGLE+LEFT_TOE_POSITION
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/COMPONENT_SEQUENCE=ALL
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/EVENT_SEQUENCE=LHS+LTO
/EXCLUDE_EVENTS=ROI_End+LBAD
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=51
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/USE_SHORT_FILENAME=TRUE
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;

! STANCE OUTPUTS (51 Points)
Export_Data_To_Ascii_File
/FILE_NAME=::CMZ_LOCATION&right_stance_metrics.txt
/SIGNAL_TYPES=LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED
/SIGNAL_FOLDER=STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE+STANCE
/SIGNAL_NAMES=RIGHT_ANKLE_ANGLE+RIGHT_ANKLE_POSITION+RIGHT_FOOT_ANGLE+RIGHT_FOREFOOT_ANGLE+RIGHT_HIP_ANGLE+RIGHT_HIP_POSITION+RIGHT_KNEE_ANGLE+RIGHT_KNEE_POSITION+RIGHT_MODELCOM_POSITION+RIGHT_PELVIS_ANGLE+RIGHT_SHANK_ANGLE+RIGHT_THIGH_ANGLE+RIGHT_TOE_ANGLE+RIGHT_TOE_POSITION
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/COMPONENT_SEQUENCE=ALL
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/EVENT_SEQUENCE=RHS+RTO
/EXCLUDE_EVENTS=ROI_End+RBAD
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=51
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/USE_SHORT_FILENAME=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=METRIC
/SIGNAL_FOLDER=TEMPORAL_DISTANCE
/SIGNAL_NAMES=Left_Cycle_Time_Count+Left_Cycle_Time_Mean+Left_Cycle_Time_StdDev+Left_Steps_Per_Minute_Count+Left_Steps_Per_Minute_Mean+Left_Steps_Per_Minute_StdDev+Left_Stride_Length_Count+Left_Stride_Length_Mean+Left_Stride_Length_StdDev+Left_Strides_Per_Minute_Count+Left_Strides_Per_Minute_Mean+Left_Strides_Per_Minute_StdDev+Overall_Speed_Mean+Overall_Stride_Width_Count+Overall_Stride_Width_Mean+Overall_Stride_Width_StdDev+Right_Cycle_Time_Count+Right_Cycle_Time_Mean+Right_Cycle_Time_StdDev+Right_Steps_Per_Minute_Count+Right_Steps_Per_Minute_Mean+Right_Steps_Per_Minute_StdDev+Right_Stride_Length_Count+Right_Stride_Length_Mean+Right_Stride_Length_StdDev+Right_Strides_Per_Minute_Count+Right_Strides_Per_Minute_Mean+Right_Strides_Per_Minute_StdDev
/FILE_NAME=::CMZ_LOCATION&stp_metrics.txt
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/COMPONENT_SEQUENCE=ALL
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/NORMALIZE_DATA=TRUE
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/USE_SHORT_FILENAME=TRUE
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;

